PsychoPy2experiment version="2021.1.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = 01_BaseWork
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Routines
  Routine Introduction
    TextComponent intro_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        HELLO!

        In this experiment, we will test your Sense of Agency or your sense of ownership towards an action.

        On the next page, will be a consent form
    KeyboardComponent key_skipintro
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Consent
    TextComponent consent_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Consent will be shown here.

        Press 'Y' to agree.
    KeyboardComponent Key_skipconsent
      allowedKeys = 'y'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine fix_ball
    ImageComponent fix_cross
      image = fixationcross.png
      size = (1.75, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent center_ball
      image = onlyballcenter.png
      size = (1.75, 1)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1.0
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  Routine Trials
    ImageComponent mpt_boxes_center_ball
      image = mptboxballcenter.png
      size = (1.75, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_shoot
      allowedKeys = 'left','right','up','down'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine go_ball
    CodeComponent code_loadimages
      Code Type = Auto->JS
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      Begin Routine:
        if key_shoot.keys == 'left':
            Stimuli = "inleft.png"
        elif key_shoot.keys == 'right':
            Stimuli = "inright.png"
        elif key_shoot.keys == 'up':
            Stimuli = "inup.png"
        elif key_shoot.keys == 'down':
            Stimuli = "indown.png"
      End Routine:
        thisExp.addData('Stimuli',Stimuli)
        print(Stimuli)
    ImageComponent UDLR_balls_trial_AC
      image [set every repeat] = $Stimuli
      size = (1.75, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.4
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  Routine Feedback
    ImageComponent rating_soa
      image [set every repeat] = SoArating.png
      size = (1.75, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    KeyboardComponent key_soa_rate
      allowedKeys = '1','2','3','4','5'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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Flow
  Routine Introduction
  Routine Consent
  Routine fix_ball
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 20
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    Routine Trials
    Routine go_ball
  LoopTerminator trials
  Routine Feedback
